OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  Crop the signal between
  Mean + 3 * Variance
  and
  Mean + 6 * Variance
Comment
  Center all values on
  Mean + 3 * Variance

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1;2;4;5;12"
  Channel List = 1;2;4;5;12
  Action = Select
  Channel Matching Method = Index
-> Spatial Filter
  Spatial Filter Coefficients = -1;-1;-1;-1;4
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16.000000
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop
  Crop method = Min/Max
  Min crop value = 16.496962
  Max crop value = 34.213787
-> Simple DSP => #9
  Equation = x - 14.496962078451762
Acquisition client => #10
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
#10.Signal stream -> Channel Selector "1;2;4;5;12"
  Channel List = 1;2;4;5;12
  Action = Select
  Channel Matching Method = Index
-> Spatial Filter
  Spatial Filter Coefficients = -1;-1;-1;-1;4
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16.000000
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop
  Crop method = Min/Max
  Min crop value = 16.496962
  Max crop value = 34.213787
-> Simple DSP => #19
  Equation = x - 14.496962078451762
Input 1=#9, Input 2=#19 -> Signal Merger => #20
Input signal=#20 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
