OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  Overview

  This scenario calculate the threshold used for Beta
  rebound detection in Use-the-force application.

  Compute the Mean and Variance
  of the Beta activity during 30sec of inactivity.
Comment
  Use Generic stream reader
  instead of Acquisition client
  to replay recorded signals
Comment
  The processing chain filter the signal
   in the [16-24Hz] frequency band (Beta band)
  Then, it select 1s epochs every 0.1s.
  This signal is squared and average to get the Beta power.

Lua Stimulator => #0
  Lua Script = ${Player_ScenarioDirectory}/stim_Use-the-force_calibration.lua
-> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger =
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = False
#0 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_00
  STOP trigger =
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = False
#0 -> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_Label_01
  Cue Image 1 = C:/Program Files/openvibe-3.2.0-64bit/share/openvibe/plugins/simple-visualization/p300-magic-card/07.png
  Stimulation 1 = OVTK_StimulationId_Label_00
Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#4.Signal stream -> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter => #6
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #10
  Averaging type = Moving epoch average
  Epoch count = 4
Input signal=#10, Input stimulations=#0 -> Stimulation based epoching
  Epoch duration (in sec) = 25
  Epoch offset (in sec) = 2.5
  Stimulation to epoch from = OVTK_StimulationId_Label_01
-> Univariate Statistics => #12
  Mean = true
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#12.Mean -> Mean Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#12.Variance -> Variance Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input - A=#12.Mean, Input - B=#12.Variance -> Simple DSP
  Equation = A+3*sqrt(B)
-> Matrix Display "Mean + 3 * sqrt(Variance)"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#6 -> Temporal filter "band-pass 16-24Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 24
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
Data=#6, Stimulations=#0 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#4.Signal stream -> Channel Selector "FCz,C1,Cz,C2,CPz"
  Channel List = FCz;C1;Cz;C2;CPz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Fitler Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5

Generic stream reader
  Filename = ${Player_ScenarioDirectory}/signals/workshop_calibration_example.ov
