OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1;2;4;5;12"
  Channel List = 1;2;4;5;12
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = -1;-1;-1;-1;4
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Temporal filter "band-pass 16-24Hz" => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 24
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #7
  Averaging type = Moving epoch average
  Epoch count = 4
Lua Stimulator => #8
  Lua Script = C:/Users/Laboratorio/Documents/GitHub/tutorial_icm_snct/stim_Use-the-force_calibration.lua
Data=#3, Stimulations=#8 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input Signal=#3, Input Stimulations=#8 -> Generic stream writer
  Filename = C:/Users/Laboratorio/Desktop/filt_signal.ov
  Use compression = false
Input Signal=#7, Input Stimulations=#8 -> Generic stream writer
  Filename = C:/Users/Laboratorio/Desktop/epoch_average.ov
  Use compression = false
